PsychoPy2experiment version="2026.1.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Sternberg_exp
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine probe
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $probe_digit
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    KeyboardComponent correct_key
      allowedKeys [set every repeat] = 'y','n'
      correctAns = $correct_answer
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine fixation
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    TextComponent fixation_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine encoding
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $digit_set
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  Routine retention
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    TextComponent retention_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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  Routine Instructions
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    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will see a set of digits.

        Memorize them.

        Then a single digit will appear.

        Press:
        Y → if it was in the set
        N → if it was NOT

        Press spacebar to start.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  LoopInitiator trials_loop loopType="TrialHandler"
    conditionsFile = sternberg_150_trials.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('digit_set', '1 2 7 4 8 5 3'), ('probe_digit', np.int64(8)), ('correct_answer', 'y'), ('set_size', np.int64(7))]),
      OrderedDict([('digit_set', '1 2 9 4 3'), ('probe_digit', np.int64(1)), ('correct_answer', 'y'), ('set_size', np.int64(5))]),
      OrderedDict([('digit_set', '3 5 1 7 8'), ('probe_digit', np.int64(5)), ('correct_answer', 'y'), ('set_size', np.int64(5))]),
      OrderedDict([('digit_set', '5 4 2 1 7'), ('probe_digit', np.int64(6)), ('correct_answer', 'n'), ('set_size', np.int64(5))]),
      OrderedDict([('digit_set', '2 1 9 7 5 3 8'), ('probe_digit', np.int64(4)), ('correct_answer', 'n'), ('set_size', np.int64(7))]),
      OrderedDict([('digit_set', '5 8 3 1 6'), ('probe_digit', np.int64(7)), ('correct_answer', 'n'), ('set_size', np.int64(5))]),
      OrderedDict([('digit_set', '4 5 9'), ('probe_digit', np.int64(8)), ('correct_answer', 'n'), ('set_size', np.int64(3))]),
      OrderedDict([('digit_set', '5 7 3 2 4 8 6'), ('probe_digit', np.int64(6)), ('correct_answer', 'y'), ('set_size', np.int64(7))]),
      OrderedDict([('digit_set', '4 1 5 2 6 7 9'), ('probe_digit', np.int64(7)), ('correct_answer', 'y'), ('set_size', np.int64(7))]),
      OrderedDict([('digit_set', '2 5 7'), ('probe_digit', np.int64(9)), ('correct_answer', 'n'), ('set_size', np.int64(3))]),
      OrderedDict([('digit_set', '1 7 9 5 6'), ('probe_digit', np.int64(2)), ('correct_answer', 'n'), ('set_size', np.int64(5))]),
      OrderedDict([('digit_set', '9 7 2'), ('probe_digit', np.int64(7)), ('correct_answer', 'y'), ('set_size', np.int64(3))])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
    Routine fixation
    Routine encoding
    Routine retention
    Routine probe
  LoopTerminator trials_loop
